# Generated by Configurator on Tue May 23 17:01:11 BST 2023

# Reset
Property,Core,Initialize,0

# Devices
#Device,COM1,SerialManager,COM1
#Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4

#Device,Chameleon3,SpinnakerCamera,Chameleon3 CM3-U3-50S5M_19462740
#Device,iBeamSmartCW,Toptica_iBeamSmartCW,iBeamSmartCW

Device,ESP32-Hub,ESP32,ESP32-Hub
Device,ESP32-Switch,ESP32,ESP32-Switch
Device,ESP32-Shutter,ESP32,ESP32-Shutter
Device,ESP32-PWM0,ESP32,ESP32-PWM0
Device,ESP32-PWM1,ESP32,ESP32-PWM1
Device,ESP32-PWM2,ESP32,ESP32-PWM2
Device,ESP32-PWM3,ESP32,ESP32-PWM3
Device,ESP32-PWM4,ESP32,ESP32-PWM4
Device,ZStage,ESP32,ZStage
Device,XYStage,ESP32,XYStage
Device,ESP32-Input,ESP32,ESP32-Input

Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,Objective,DemoCamera,DObjective

# Pre-init settings for devices
#Property,COM1,AnswerTimeout,5000.00
#Property,COM1,BaudRate,9600
#Property,COM1,DTR,Disable
#Property,COM1,DataBits,8
#Property,COM1,DelayBetweenCharsMs,0.0000
#Property,COM1,Fast USB to Serial,Disable
#Property,COM1,Handshaking,Off
#Property,COM1,Parity,None
#Property,COM1,StopBits,1
#Property,COM1,Verbose,1

#Property,COM6,AnswerTimeout,5000.00
#Property,COM6,BaudRate,115200
#Property,COM6,DTR,Disable
#Property,COM6,DataBits,8
#Property,COM6,DelayBetweenCharsMs,0.0000
#Property,COM6,Fast USB to Serial,Disable
#Property,COM6,Handshaking,Off
#Property,COM6,Parity,None
#Property,COM6,StopBits,1
#Property,COM6,Verbose,1

Property,COM4,AnswerTimeout,5000.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

#Property,iBeamSmartCW,Description,iBeam smart Laser Controller
#Property,iBeamSmartCW,Port,COM4

#Property,ESP32-Hub,Port,COM6
Property,ESP32-Hub,Port,COM4
Property,ESP32-Hub,Logic,Normal
Property,ESP32-PWM0,Power %,100.0000
Property,ESP32-PWM1,Power %,100.0000
Property,ESP32-PWM2,Power %,100.0000
Property,ESP32-PWM3,Power %,100.0000
Property,ESP32-PWM4,Power %,100.0000
Property,XYStage,X Stage Max Posn(um),200.0000
Property,XYStage,X Stage Min Posn(um),0.0000
Property,XYStage,Y Stage Max Posn(um),200.0000
Property,XYStage,Y Stage Min Posn(um),0.0000
Property,ESP32-Input,Pin,0
Property,ESP32-Input,Pull-Up-Resistor,On

# Hub (parent) references
Parent,ESP32-Switch,ESP32-Hub
Parent,ESP32-Shutter,ESP32-Hub
Parent,ESP32-PWM0,ESP32-Hub
Parent,ESP32-PWM1,ESP32-Hub
Parent,ESP32-PWM2,ESP32-Hub
Parent,ESP32-PWM3,ESP32-Hub
Parent,ESP32-PWM4,ESP32-Hub
Parent,ZStage,ESP32-Hub
Parent,XYStage,ESP32-Hub
Parent,ESP32-Input,ESP32-Hub
Parent,Camera,DHub
Parent,Objective,DHub

# Initialize
Property,Core,Initialize,1

# Focus directions
FocusDirection,ZStage,0

# Roles
#Property,Core,Camera,Chameleon3
Property,Core,Shutter,ESP32-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1


# Labels
# ESP32-Switch
Label,ESP32-Switch,1,Red
Label,ESP32-Switch,2,Yellow
Label,ESP32-Switch,4,Green
Label,ESP32-Switch,8,Blue
Label,ESP32-Switch,13,RGB

# Group: Channel
ConfigGroup,Channel,Red_LED,ESP32-Switch,Label,Red
ConfigGroup,Channel,Yellow_LED,ESP32-Switch,Label,Yellow
ConfigGroup,Channel,Green_LED,ESP32-Switch,Label,Green
ConfigGroup,Channel,Blue_LED,ESP32-Switch,Label,Blue
ConfigGroup,Channel,RGB,ESP32-Switch,Label,RGB

# Objective
Label,Objective,1,100x(2x2)
Label,Objective,0,100x

# Configuration presets
ConfigGroup,Red,NewPreset,ESP32-PWM0,Volts,0.0000
ConfigGroup,Yellow,NewPreset,ESP32-PWM1,Volts,0.0000
ConfigGroup,Green,NewPreset,ESP32-PWM2,Volts,0.0000
ConfigGroup,Blue,NewPreset,ESP32-PWM3,Volts,0.0000

#ConfigGroup,Laser On/Off,On,iBeamSmartCW,Laser Operation,On
#ConfigGroup,Laser On/Off,Off,iBeamSmartCW,Laser Operation,Off
#ConfigGroup,Laser Power (mW),NewPreset,iBeamSmartCW,Power (mW),0.0000

# Sequencing, Blanking and Triggering Modes
ConfigGroup,Seq,On,ESP32-Switch,Sequence,On
ConfigGroup,Seq,Off,ESP32-Switch,Sequence,Off

ConfigGroup,Blanking Mode,On,ESP32-Switch,Blanking Mode,On
ConfigGroup,Blanking Mode,Off,ESP32-Switch,Blanking Mode,Off

#ConfigGroup,TriggerMode,On,Chameleon3,Trigger Mode,On
#ConfigGroup,TriggerMode,Off,Chameleon3,Trigger Mode,Off

# Group: Objective
# Preset: 100x (2x2 binning)
#ConfigGroup,Objective,100x (2x2 binning),Chameleon3,Video Mode,Mode1
ConfigGroup,Objective,100x (2x2 binning),Objective,Label,100x(2x2)

# Preset: 100x
ConfigGroup,Objective,100x,Objective,Label,100x
#ConfigGroup,Objective,100x,Chameleon3,Video Mode,Mode0

# Group: CameraDefault
#ConfigGroup,CameraDefault,Startup,Chameleon3,Black Level,1.0
#ConfigGroup,CameraDefault,Startup,Chameleon3,Gain,25.0
#ConfigGroup,CameraDefault,Startup,Chameleon3,Pixel Format,Mono16

# Group: Binning MODE
#ConfigGroup,Binning MODE,Mode1,Chameleon3,Video Mode,Mode1
#ConfigGroup,Binning MODE,Mode0,Chameleon3,Video Mode,Mode0


# PixelSize settings
# Resolution preset: 100x2x2
ConfigPixelSize,100x2x2,Objective,Label,100x(2x2)
PixelSize_um,100x2x2,0.05
PixelSizeAffine,100x2x2,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 100x
ConfigPixelSize,100x,Objective,Label,100x
PixelSize_um,100x,0.1
PixelSizeAffine,100x,1.0,0.0,0.0,0.0,1.0,0.0
PixelSize_um,100x,0.1
PixelSizeAffine,100x,1.0,0.0,0.0,0.0,1.0,0.0

